WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(SessionPath, RigPath, TaskPath) => #0
Annotation TODO(Text="Should be part of package") => #1
#0, #1 -> GroupWorkflow ReadSchemas
    ExternalizedMapping(Path(DisplayName=SessionPath))
    -> Bonsai.IO.ReadAllText(Path=C:\Users\saleem_lab\Documents\GitHub\hf-visual\local\UclOpenSession.json)
    -> AsyncSubject RawSessionSchema => #2
    ExternalizedMapping(Path(DisplayName=RigPath))
    -> Bonsai.IO.ReadAllText(Path=C:\Users\saleem_lab\Documents\GitHub\hf-visual\local\UclOpenHfVisualRig.json)
    -> AsyncSubject RawRigSchema => #5
    ExternalizedMapping(Path(DisplayName=TaskPath))
    -> Bonsai.IO.ReadAllText(Path=C:\Users\saleem_lab\Documents\GitHub\hf-visual\local\UclOpenHfVisualTaskLogic.json)
    -> AsyncSubject RawTaskSchema => #8
    #2, #5, #8 -> Zip
    -> WorkflowOutput

GroupWorkflow LoadSchemas
    SubscribeSubject RawSessionSchema
    -> UclOpenHfVisualDataSchema.DeserializeFromJson(Type=TypeMapping<UclOpenHfVisualDataSchema.UclOpenSession>)
    -> Take(Count=1)
    -> AsyncSubject SessionSchema

    SubscribeSubject RawRigSchema
    -> UclOpenHfVisualDataSchema.DeserializeFromJson(Type=TypeMapping<UclOpenHfVisualDataSchema.UclOpenHfVisualRig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

    SubscribeSubject RawTaskSchema
    -> Take(Count=1)
    -> UclOpenHfVisualDataSchema.DeserializeFromJson(Type=TypeMapping<UclOpenHfVisualDataSchema.UclOpenHfVisualTaskLogic>)
    -> AsyncSubject TaskLogicSchema
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskLogicParameters

GroupWorkflow Initialization
    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<System.Reactive.Unit> StopExperiment
    BehaviorSubject<System.String> CurrentTexture

GroupWorkflow Hardware
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=Arduino)
    -> PropertyMapping(PortName(Selector=PortName), BaudRate(Selector=BaudRate), NewLine(Selector=NewLine))
    -> IncludeWorkflow Arduino
      Path=UclOpen.Devices:SerialDevice.bonsai
      PortName=COM4
      BaudRate=1000000
      Encoding=us-ascii
      NewLine=\n
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1
      SerialMessageSubjectName=SerialMessagesMatrix

    SubscribeSubject RigSchema
    -> MemberSelector(Selector=ArduinoPhotodiode)
    -> PropertyMapping(PortName(Selector=PortName), BaudRate(Selector=BaudRate), NewLine(Selector=NewLine))
    -> IncludeWorkflow ArduinoPhotodiode
      Path=UclOpen.Devices:SerialDevice.bonsai
      PortName=COM6
      BaudRate=250000
      Encoding=us-ascii
      NewLine=\n
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1
      SerialMessageSubjectName=SerialMessagesPhotodiode

    SubscribeSubject SerialMessagesMatrix
    -> ParseMatrixSerialDevice
    -> PublishSubject MatrixArduino

    SubscribeSubject SerialMessagesPhotodiode
    -> ParseMatrixPhotodiodeSerialDevice
    -> PublishSubject MatrixPhotodiode

    GroupWorkflow Display
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen)
        -> PropertyMapping(DisplayDevice(Selector=DisplayIndex), TargetUpdateFrequency(Selector=TargetUpdateFrequency), TargetRenderFrequency(Selector=TargetRenderFrequency)) => #2
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen.Calibration)
        -> Index(Operand=StringProperty(Value=main))
        -> MemberSelector(Selector=Intrinsics.FrameWidth)
        -> PropertyMapping(Width) => #7
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen.Calibration)
        -> Index(Operand=StringProperty(Value=main))
        -> MemberSelector(Selector=Intrinsics.FrameHeight)
        -> PropertyMapping(Height) => #12
        #2, #7, #12 -> Bonsai.Shaders.CreateWindow
          Width=640
          Height=480
          VSync=On
          SwapSync=false
          ClearColor=Black
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=true
          Location=nil
          WindowBorder=Resizable
          WindowState=Fullscreen
          DisplayDevice=Second
          TargetRenderFrequency=60
          TargetUpdateFrequency=120
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Bonsai.Resources.LoadResources

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen.TextureAssetsDirectory)
        -> PropertyMapping(Path) => #18
        Annotation TODO(Text="Should be part of package") => #19
        #18, #19 -> GroupWorkflow LoadTextureBank
            ExternalizedMapping(Path, SearchPattern)
            -> Bonsai.IO.GetFiles(Path=../textures, SearchPattern=*.tif, SearchOption=TopDirectoryOnly)
            -> Merge
            -> CreateObservable LoadTexture
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject TexturePath

                SubscribeSubject TexturePath
                -> Bonsai.IO.GetFileNameWithoutExtension => #4
                SubscribeSubject TexturePath
                -> PropertyMapping(FileName)
                -> Bonsai.Shaders.LoadImage => #7
                  Width=nil
                  Height=nil
                  InternalFormat=Rgba
                  WrapS=Repeat
                  WrapT=Repeat
                  MinFilter=Linear
                  MagFilter=Linear
                  FileName=../textures\SN_85_5.tif
                  ColorType=Unchanged
                  FlipMode=Vertical
                #4, #7 -> Zip
                -> WorkflowOutput
            -> Merge
            -> ToDictionary(KeySelector=Item1, ElementSelector=Item2) => #5
            ExternalizedMapping(Name(DisplayName=TextureBank)) => #6
            #5, #6 -> AsyncSubject TextureBank

        Bonsai.Shaders.RenderFrame
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1)
        -> PublishSubject DrawCall
        -> Bonsai.Shaders.DrawFramebuffer(RenderState="", FramebufferAttachments="")
        -> Bonsai.Shaders.ReadPixels(RegionOfInterest=nil)
        -> PublishSubject DebugView

        SubscribeSubject DrawCall
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawImage.bonsai
          TextureName=""
          ExtentX=2
          ExtentY=2
          LocationX=0
          LocationY=0
          Layer=0
          Angle=0
          ScaleX=1
          ScaleY=1
          ShiftX=0
          ShiftY=0

        SubscribeSubject DrawCall => #29
        SubscribeSubject SyncQuadColor
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #31
          Expression: it ? 1.0 : 0.0
        #29, #31 -> WithLatestFrom
        -> InputMapping(Selector=Item1, ColorR(Selector=Item2), ColorG(Selector=Item2), ColorB(Selector=Item2)) => #33
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=SyncQuad)
        -> PropertyMapping(ExtentX(Selector=ExtentX), ExtentY(Selector=ExtentY), LocationX(Selector=LocationX), LocationY(Selector=LocationY)) => #36
        #33, #36 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=0.1
          ExtentY=0.1
          LocationX=-1
          LocationY=-1
          Layer=0
          Angle=0
          ColorR=0
          ColorG=0
          ColorB=0
          ColorA=1

        BooleanProperty(Value=false)
        -> BehaviorSubject SyncQuadColor

    Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="") => #15
    SubscribeSubject MatrixArduino => #16
    #15, #16 -> SubscribeWhen
    -> PublishSubject CameraStream

Defer TaskLogic => #6
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=AvailableTextures)
    -> Bonsai.Numerics.SelectPermutation
    -> Merge => #3
    SubscribeSubject TextureBank => #4
    #3, #4 -> SubscribeWhen
    -> CreateObservable PresentationSequence
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject TextureName

        SubscribeSubject TextureBank => #3
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=InterPresentationTexture)
        -> PropertyMapping(Value) => #6
        #3, #6 -> Index(Operand=StringProperty(Value=blank1))
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Image, TextureName="", TextureTarget=Texture2D)
        -> Sink UpdateSyncQuad
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=false)
            -> MulticastSubject SyncQuadColor
            -> WorkflowOutput
        -> Sink UpdateCurrentTexture => #10
            WorkflowInput Source1 => #0
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=InterPresentationTexture) => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject CurrentTexture
            -> WorkflowOutput
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=InterPresentationTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #14
        #10, #14 -> Bonsai.Shaders.Delay(DueTime=PT0.75S) => #15
        SubscribeSubject TextureBank => #16
        #15, #16 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #18
        SubscribeSubject TextureName
        -> PropertyMapping(Value) => #20
        #18, #20 -> Index(Operand=StringProperty(Value=SImg_42_4))
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Image, TextureName="", TextureTarget=Texture2D)
        -> Sink UpdateSyncQuad
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=true)
            -> MulticastSubject SyncQuadColor
            -> WorkflowOutput
        -> Sink UpdateCurrentTexture => #24
            WorkflowInput Source1 => #0
            SubscribeSubject TextureName => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject CurrentTexture
            -> WorkflowOutput
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=PresentationTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #28
        #24, #28 -> Bonsai.Shaders.Delay(DueTime=PT0.25S)
        -> Take(Count=1)
        -> WorkflowOutput
    -> Concat
    -> Repeat
    -> WorkflowOutput
SubscribeSubject StartExperiment => #7
#6, #7 -> SubscribeWhen => #8
SubscribeSubject StopExperiment => #9
#8, #9 -> TakeUntil

GroupWorkflow Visualizer
    Bonsai.Gui.ButtonBuilder StartButton(Enabled=true, Visible=true, Text=Start)
    -> Sink StartExperiment
        WorkflowInput Source1
        -> Unit
        -> MulticastSubject StartExperiment
        -> WorkflowOutput
    -> VisualizerMapping => #2
    Bonsai.Gui.ButtonBuilder StopButton(Enabled=true, Visible=true, Text=Stop)
    -> Sink StopExperiment
        WorkflowInput Source1
        -> Unit
        -> MulticastSubject StopExperiment
        -> WorkflowOutput
    -> VisualizerMapping => #5
    #2, #5 -> Bonsai.Gui.TableLayoutPanelBuilder ExperimentControls(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder ExperimentControls(Enabled=true, Visible=true, Text="Experiment Controls")
    -> VisualizerMapping => #9
    SubscribeSubject CurrentTexture
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder CurrentTexture(Enabled=true, Visible=true, Text="Current Texture")
    -> VisualizerMapping => #13
    SubscribeSubject MatrixArduino
    -> MemberSelector(Selector=Value.EncoderCount)
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(SymbolType=None, LineWidth=2, CurveSettings="", Capacity=nil, Min=nil, Max=nil)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder Encoder(Enabled=true, Visible=true, Text=Encoder)
    -> VisualizerMapping => #19
    SubscribeSubject MatrixArduino
    -> MemberSelector(Selector=Value.LastSyncPulseTime)
    -> DistinctUntilChanged
    -> IntProperty(Value=1)
    -> Accumulate
    -> Mod(Operand=IntProperty(Value=2))
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(SymbolType=None, LineWidth=2, CurveSettings="", Capacity=nil, Min=nil, Max=nil)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder SyncPulse(Enabled=true, Visible=true, Text="Sync Pulse")
    -> VisualizerMapping => #29
    SubscribeSubject DebugView
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder Display(Enabled=true, Visible=true, Text=Display)
    -> VisualizerMapping => #33
    SubscribeSubject MatrixPhotodiode
    -> MemberSelector(Selector=PhotodiodeVal)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder Photodiode(Enabled=true, Visible=true, Text=Photodiode)
    -> VisualizerMapping => #38
    SubscribeSubject CameraStream
    -> VisualizerMapping => #40
    #9, #13, #19, #29, #33, #38, #40 -> Bonsai.Gui.TableLayoutPanelBuilder ExperimentPanel
      Enabled=true
      Visible=true
      ColumnCount=2
      RowCount=4
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=1)
    -> WorkflowOutput

GroupWorkflow Logging
    SubscribeSubject SessionSchema
    -> MemberSelector(Selector=LoggingRootPath)
    -> PropertyMapping(Path) => #2
    SubscribeSubject SessionSchema
    -> MemberSelector(Selector=AnimalId)
    -> PropertyMapping(SubjectId) => #5
    SubscribeSubject SessionSchema
    -> MemberSelector(Selector=SessionId)
    -> PropertyMapping(SessionId) => #8
    #2, #5, #8 -> IncludeWorkflow(Path=UclOpen.Logging:LogController.bonsai, SubjectId=M26030, SessionId=20260606_1, Path=C:/Users/saleem_lab/Documents/GitHub/hf-visual/temp_data)

    SubscribeSubject MatrixArduino => #10
    Annotation TODO(Text="Should be part of package. Should also use GroupByTime") => #11
    #10, #11 -> GroupWorkflow LogData
        WorkflowInput Source1 => #0
        ExternalizedMapping(Name, Extension)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=Arduino)
            -> Take(Count=1) => #4
            -> UclOpen.Core.StripSubstring => #5
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=csv)
            -> Take(Count=1) => #8
            #0, #5, #4, #8 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #3
        ExternalizedMapping(Selector) => #4
        #0, #3, #4 -> Bonsai.IO.CsvWriter
          FileName=C:/Users/saleem_lab/Documents/GitHub/hf-visual/temp_data\sub-M26030\ses-20260606_1_date-2026-09-06T15-09-02\Arduino\Arduino.csv
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=true
          Selector=it
        -> WorkflowOutput

    SubscribeSubject MatrixPhotodiode => #13
    SubscribeSubject MatrixArduino
    -> MemberSelector(Selector=Seconds) => #15
    #13, #15 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> GroupWorkflow LogData
        WorkflowInput Source1 => #0
        ExternalizedMapping(Name, Extension)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=ArduinoPhotodiode)
            -> Take(Count=1) => #4
            -> UclOpen.Core.StripSubstring => #5
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=csv)
            -> Take(Count=1) => #8
            #0, #5, #4, #8 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #3
        ExternalizedMapping(Selector) => #4
        #0, #3, #4 -> Bonsai.IO.CsvWriter
          FileName=C:/Users/saleem_lab/Documents/GitHub/hf-visual/temp_data\sub-M26030\ses-20260606_1_date-2026-09-06T15-09-02\ArduinoPhotodiode\ArduinoPhotodiode.csv
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=true
          Selector=it
        -> WorkflowOutput

    SubscribeSubject CurrentTexture => #19
    SubscribeSubject MatrixArduino
    -> MemberSelector(Selector=Seconds) => #21
    #19, #21 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> GroupWorkflow LogData
        WorkflowInput Source1 => #0
        ExternalizedMapping(Name, Extension)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=Texture)
            -> Take(Count=1) => #4
            -> UclOpen.Core.StripSubstring => #5
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=csv)
            -> Take(Count=1) => #8
            #0, #5, #4, #8 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #3
        ExternalizedMapping(Selector) => #4
        #0, #3, #4 -> Bonsai.IO.CsvWriter
          FileName=C:/Users/saleem_lab/Documents/GitHub/hf-visual/temp_data\sub-M26030\ses-20260606_1_date-2026-09-06T15-09-02\Texture\Texture.csv
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=true
          Selector=it
        -> WorkflowOutput

    SubscribeSubject CameraStream => #25
    SubscribeSubject MatrixArduino
    -> MemberSelector(Selector=Seconds) => #27
    #25, #27 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> GroupWorkflow LogVideo
        WorkflowInput Source1 => #0
        ExternalizedMapping(Name) => #1
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=VideoData) => #3
            -> UclOpen.Core.StripSubstring => #4
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=csv)
            -> Take(Count=1) => #7
            #0, #4, #3, #7 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #3
        #0, #3 -> Bonsai.IO.CsvWriter
          FileName=C:/Users/saleem_lab/Documents/GitHub/hf-visual/temp_data\sub-M26030\ses-20260606_1_date-2026-09-06T15-09-02\VideoData\VideoData.csv
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=true
          Selector="Seconds,Value.Size"
        -> MemberSelector(Selector=Value) => #5
        #1 -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=VideoData) => #3
            -> UclOpen.Core.StripSubstring => #4
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=avi)
            -> Take(Count=1) => #7
            #0, #4, #3, #7 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #7
        ExternalizedMapping(FrameRate) => #8
        #5, #7, #8 -> Bonsai.Vision.VideoWriter
          FileName=C:/Users/saleem_lab/Documents/GitHub/hf-visual/temp_data\sub-M26030\ses-20260606_1_date-2026-09-06T15-09-02\VideoData\VideoData.avi
          Suffix=None
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=50
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        -> WorkflowOutput

    SubscribeSubject RigSchema
    -> UclOpenHfVisualDataSchema.SerializeToJson(Formatting=None)
    -> Delay(DueTime=PT1S)
    -> GroupWorkflow LogDataSchema
        WorkflowInput Source1 => #0
        ExternalizedMapping(Name)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=RigSchema)
            -> Take(Count=1) => #4
            -> UclOpen.Core.StripSubstring => #5
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=json)
            -> Take(Count=1) => #8
            #0, #5, #4, #8 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(Path) => #3
        #0, #3 -> UclOpen.Logging.JsonWriter
          Path=C:/Users/saleem_lab/Documents/GitHub/hf-visual/temp_data\sub-M26030\ses-20260606_1_date-2026-09-06T15-09-02\RigSchema\RigSchema.json
          Suffix=None
          Overwrite=false
        -> WorkflowOutput

    SubscribeSubject TaskLogicSchema
    -> UclOpenHfVisualDataSchema.SerializeToJson(Formatting=None)
    -> Delay(DueTime=PT1S)
    -> GroupWorkflow LogDataSchema
        WorkflowInput Source1 => #0
        ExternalizedMapping(Name)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=TaskLogicSchema)
            -> Take(Count=1) => #4
            -> UclOpen.Core.StripSubstring => #5
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=json)
            -> Take(Count=1) => #8
            #0, #5, #4, #8 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(Path) => #3
        #0, #3 -> UclOpen.Logging.JsonWriter
          Path=C:/Users/saleem_lab/Documents/GitHub/hf-visual/temp_data\sub-M26030\ses-20260606_1_date-2026-09-06T15-09-02\TaskLogicSchema\TaskLogicSchema.json
          Suffix=None
          Overwrite=false
        -> WorkflowOutput

    SubscribeSubject SessionSchema
    -> UclOpenHfVisualDataSchema.SerializeToJson(Formatting=None)
    -> Delay(DueTime=PT1S) => #41
    Annotation TODO(Text="Should be part of package. Should also use GroupByTime") => #42
    #41, #42 -> GroupWorkflow LogDataSchema
        WorkflowInput Source1 => #0
        ExternalizedMapping(Name)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=SessionSchema)
            -> Take(Count=1) => #4
            -> UclOpen.Core.StripSubstring => #5
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=json)
            -> Take(Count=1) => #8
            #0, #5, #4, #8 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(Path) => #3
        #0, #3 -> UclOpen.Logging.JsonWriter
          Path=C:/Users/saleem_lab/Documents/GitHub/hf-visual/temp_data\sub-M26030\ses-20260606_1_date-2026-09-06T15-09-02\SessionSchema\SessionSchema.json
          Suffix=None
          Overwrite=false
        -> WorkflowOutput
